'CR1000X Series Datalogger

' CR1000X is wired to iridium modem as follows
' C3 - Iridium white wire,(TX)
' C4 - Iridium green wire,(RX)
' C5 - Iridium red power toggle wire
' The iridium modem is conected directly to power source Red - 12v and Black - G
'
' G-NSDOG2-002 Inclinomter (measures +-45 degrees)
'     Note: Should use G-NSDOG02-003 it is +-90 degrees)
' SW12V-1 - red wire
' G   - black wire
' SE2 - green wire  (y axis measurement)

' S200 Wiring
' C1    - Blue, (TX)
' C2    - Brown, (RX)
' SW12V-1 - Pink
' G     - Black

'Declare Public Variables

Public rTime(9)               'declare as public and dimension rTime to 9
'Alias rTime(1) = Year         'assign the alias Year to rTime(1)
'Alias rTime(2) = Month        'assign the alias Month to rTime(2)
'Alias rTime(3) = DOM          'assign the alias DOM to rTime(3)
'Alias rTime(4) = Hour         'assign the alias Hour to rTime(4)
'Alias rTime(5) = Minute       'assign the alias Minute to rTime(5)
'Alias rTime(6) = Second       'assign the alias Second to rTime(6)
'Alias rTime(7) = uSecond      'assign the alias uSecond to rTime(7)
'Alias rTime(8) = WeekDay      'assign the alias WeekDay to rTime(8)
Alias rTime(9) = Day_of_Year  'assign the alias Day_of_Year to rTime(9)

Public numGood,makeRead,forceRead,forceMessage,testLaser
Public PTemp, batt_volt,distance_f,distance_s,distance_l,i
Public yTilt,angle
Public raw As String * 100
Public SplitResult(7) As String * 10
Public rawDist_f(50)
Public rawDist_s(50)
Public rawDist_l(50)

'iridium Variables
Public tries                  ' Counter that keeps track of the number of attempts to send data (zero'd out each hour)
Public success               ' The variable is true when the modem is successful
'Const Laserport = com1
'Const Iridiumport = com2      ' This is the serail port that the iridium modem is connected to

Const Laserport = ComC1  'Datalogger's control ports C1 (TX) & C2 (RX)
Const Iridiumport = ComC3  'Datalogger's control ports C3 (TX) & C4 (RX)
'Const Iridiumpowerport = 5  ' This is the port that turns the modem off and on
Const Iridiumpowerport = C5
Const numvals = 6
Const sendInterval = 60

Public SystemEnabled_1,SystemEnabled_2
Const OpenDate = 91 ' April 1
Const CloseDate = 304 ' Oct 31

'Define Data Tables
DataTable (hourtab,1,-1)
  CardOut (0 ,-1 )
  'DataInterval (0,60,Min,10)
  Minimum (1,batt_volt,FP2,0,False)
  Sample (1,PTemp,FP2)
  Sample (1,distance_f,FP2)
  Sample (1,distance_s,FP2)
  Sample (1,distance_l,FP2)
  Sample (1,angle,FP2)
  Sample (1,tries,FP2)
EndTable

DataTable (rawMeasure_f,1,-1)
  CardOut (0 ,-1 )
  'DataInterval (0,60,Min,10)
  Sample (50,rawDist_f,FP2)
EndTable

DataTable (rawMeasure_s,1,-1)
  CardOut (0 ,-1 )
  'DataInterval (0,60,Min,10)
  Sample (50,rawDist_s,FP2)
  Sample (1,SplitResult(7),String)
EndTable
DataTable (rawMeasure_l,1,-1)
  CardOut (0 ,-1 )
  'DataInterval (0,60,Min,10)
  Sample (50,rawDist_l,FP2)
EndTable

'This subroutine converts a number to a positive integer for transfer by iridium
'i.e.  12.14 becomes  2121  (add 200 then multiply by 10)
Sub converttolong (floatval As Float, longval As Long)
  longval = FIX((floatval+200)*10)
EndSub

'This subroutine converts from Celcius to Fahrenhiet temperature
Sub converttof(temp As Float)
  temp = temp*(9/5)+32
EndSub

Sub senddatatoiridium(numberofvalues,attempts,success)
  Dim result(6)

  Dim message As String * 150
  'Public message As String * 150
  'Dim meslength
  Public meslength
  Public localattempts
  'Dim lastrecord(100)
  Public lastrecord(100)
  'Dim longrecord(100) As Long
  Public longrecord(100) As Long
  Dim byte1 As Long
  Dim byte2 As Long
  'Dim hours As Long
  Public hours As Long
  Public hours2 As Long
  Dim offset1
  Dim iridchecksum As Long
  Public debug1 As String * 30
  Public debug2 As String * 30
  Public debug3 As String * 30
  Public debug4 As String * 30
  Public debug5 As String * 30

  Dim binaryok As String * 20
  Dim modemready As Long
  'Public modemready As Long
  Dim online As Long
  Public messageresult As String * 50
  Public numresult(2) As String * 50
  Dim j

  'Initialize iridium Variables
  offset1 = 0
  iridchecksum = 0
  message = ""
  success = 0
  localattempts = 0

  '###
  '### Get the last data record
  '###

  GetRecord(lastrecord,hourtab,1)

  '###
  '###Get the hours since beginning of the year and insert into binary message
  '### Start calculating binary checksum value
  '###
  hours2 = INT(hourtab.Timestamp(2,1))
  hours = (INT((hourtab.Timestamp(2,1))/3600)+24)
  MoveBytes (message,offset1,hours,2,2)
  MoveBytes (byte1,3,hours,2,1)
  MoveBytes (byte2,3,hours,3,1)
  iridchecksum = iridchecksum + byte1+byte2
  offset1 = offset1 + 2

  '###
  '###Get the specified number of values from the last record and insert them into the binary message
  '###
  For j=1 To numberofvalues Step 1
    converttolong(lastrecord(j),longrecord(j))
    MoveBytes (message,offset1,longrecord(j),2,2)
    MoveBytes (byte1,3,longrecord(j),2,1)
    MoveBytes (byte2,3,longrecord(j),3,1)
    iridchecksum = iridchecksum + byte1+byte2
    offset1 = offset1 + 2
  Next j

  '###
  '### Add checksum to binary message
  '###
  meslength = numberofvalues*2+2
  MoveBytes (message,offset1,iridchecksum,2,2)
  offset1 = offset1 + 2

  '###
  '### Turn on modem and complete SBD session
  '###
  PortSet (Iridiumpowerport,1 )

  Delay (1,3,Sec)

  SerialOpen (Iridiumport,19200,3,0,200)
  While ((success <> 1) AND (localattempts < 4))
  debug1 = ""
  debug2 = ""
  debug3 = ""
  debug4 = ""
  debug5 = ""
  SerialFlush (Iridiumport)
  messageresult = "-"
  binaryok = 0
  numresult(1) = 0
  numresult(2) = 0
  online = 0
  modemready = 0
  result() = 0
  attempts = attempts + 1
  localattempts = localattempts + 1
  modemready = SerialOut(Iridiumport, "AT+SBDWB=" + meslength+CHR(13),"READY",1,300)
  If (modemready<>0) Then
    debug1 = "Modem Ready"
    SerialOutBlock(Iridiumport,message,offset1)
    SerialIn (binaryok,Iridiumport,100,"0",5)
    If (InStr (1,binaryok,"0",2)) Then
      debug2 = "Modem Accepts Data"
      debug3 = "Waiting for Satellite"
      online = SerialOut (Iridiumport,"AT+CIER=1,0,1,0"+CHR(13),"+CIEV:1,1",1,1000)                            'Set modem config and wait for satellite connection
      If (online <> 0) Then
        debug3 = "Satellite Visible"
        debug4 = "Message Sent"
        SerialOut(Iridiumport,"AT+SBDIX"+CHR(13),"",0,0)
        SerialIn(messageresult,Iridiumport,4000,0,30)
        SplitStr(numresult,messageresult,":",2,5)
        SplitStr(result,numresult(2),",",6,5)
        If (result(1) < 5) Then
          debug5 = "Delivery confirmed by Satellite"
          success = 1
        Else
          debug4 = "Message Failed"
        EndIf
      Else
        debug3 = "No satellite Connection"
      EndIf
    Else
      debug2 = "Data not accepted by modem"
    EndIf
  Else
    debug1 = "Modem Not Ready"
  EndIf

  Wend
  If (success = 0) Then
    debug5 = "Message Not Delivered"
  EndIf
  SerialOut(Iridiumport,"AT+SBDD0"+CHR(13),"",0,100)
  SerialFlush (Iridiumport)
  SerialClose(Iridiumport)
  PortSet(Iridiumpowerport,0)

EndSub


'Main Program
BeginProg
  success = 0
  SystemEnabled_1 = 0
  SystemEnabled_2 = 0
  'PortsConfig (&B00010000,&B11111111)
  SerialOpen (Laserport,115200,0,0,200)
  SerialOpen (Iridiumport,19200,3,0,200)

  Scan (1,min,0,0)

    RealTime(rTime())

    SystemEnabled_1 = 0 ' SystemEnabled defaults to "Disable"
    SW12 (SW12_1,0) 'Force Laser and Tilt Meter Off

    If Day_of_Year <=CloseDate AND Day_of_Year >=OpenDate Then SystemEnabled_1 = 1

    If SystemEnabled_1 = 1 Then

      If forceRead = 1 Then
        makeRead = 1
      EndIf
      If TimeIntoInterval(0,sendInterval,min) Then
        makeRead = 1
      EndIf

      If testLaser = 1 Then
        makeRead = 0
        SW12 (SW12_1,1)
      EndIf

      If TimeIntoInterval(0,sendInterval,min) Then
        forceRead = 0
      EndIf

      If makeRead = 1 Then

        PanelTemp (PTemp,250)
        Battery (batt_volt)

        numGood = 0
        SW12 (SW12_1,1)
        Delay(0,2,2)
        VoltSe (yTilt,1,mV5000,2,1,0,250,1.0,0)
        angle = ((yTilt-500)/4000)*90-45
        SerialFlush(Laserport)
        SerialOut(Laserport,"$DM,7"+CHR(13)+CHR(10),"",0,0)
        'DM4 - Last
        'DM2 - First
        'DM3 - Strongest
        'DM7 - First,strongest,last
        Delay(0,1,2)
        SerialOut(Laserport,"$LS,2"+CHR(13)+CHR(10),"",0,0)
        'LS0 - Do not report weaker
        'LS1 - Report weaker if no strong
        'LS2 - Always report weaker
        Delay(0,1,2)
        SerialOut(Laserport,"$MM,0"+CHR(13)+CHR(10),"",0,0)
        'MM0 - Standard Range
        'MM1 - Extended Range
        'MM2 - Itelligent Range
        Delay(0,1,2)

        'TAKE FIRST SET OF MEASUREMENTS
        SerialOut(Laserport,"$GO,60"+CHR(13)+CHR(10),"",0,0)
        'Delay(0,1,2)
        SerialIn (raw,Laserport,100,10,100)
        SerialIn (raw,Laserport,100,10,100)

        For i = 1 To 50 Step 1
          SerialFlush(Laserport)
          'example laser output  "$DM,L,6.40,F,0,4-1072*9E16"
          SerialIn (raw,Laserport,100,10,100)
          SplitStr (SplitResult(1),raw,",",7,7)
          If SplitResult(1) = "$DM" Then
            rawDist_f(i) = SplitResult(3)
            rawDist_s(i) = SplitResult(4)
            rawDist_l(i) = SplitResult(5)
            numGood = numGood + 1
          Else
            rawDist_f(i) = 0'9999
            rawDist_s(i) = 0'9999
            rawDist_l(i) = 0'9999
          EndIf

        Next

        CallTable rawMeasure_f
        CallTable rawMeasure_s
        CallTable rawMeasure_l

        SortSpa (rawDist_f,50,rawDist_f)
        SortSpa (rawDist_s,50,rawDist_s)
        SortSpa (rawDist_l,50,rawDist_l)
        distance_f = rawDist_f(INT(numGood/2))
        distance_s = rawDist_s(INT(numGood/2))
        distance_l = rawDist_l(INT(numGood/2))

        CallTable hourtab
        'CallTable rawMeasure_f
        'CallTable rawMeasure_s
        'CallTable rawMeasure_l

        makeRead = 0
        SW12 (SW12_1,0)
      EndIf
    EndIf

  NextScan

  SlowSequence
  Scan (1,min,0,0)

    SystemEnabled_2 = 0 ' SystemEnabled_2 defaults to "Disable"
    PortSet(Iridiumpowerport,0)'Force Iridium Off

    If Day_of_Year <=CloseDate AND Day_of_Year >=OpenDate Then SystemEnabled_2 = 1
    If SystemEnabled_2 = 1 Then

      debug1 = ""
      debug2 = ""
      debug3 = ""
      debug4 = ""

      If forceMessage = 1 Then
        'Call senddatatoiridium(numvals,tries,success)
        forceMessage = 0
      EndIf

      If TimeIntoInterval(1,sendInterval,min) Then
        tries = 0
        'Call senddatatoiridium(numvals,tries,success)
      EndIf

      If TimeIntoInterval(3,5,min) Then
        If (success = 0) Then
          'Call senddatatoiridium(numvals,tries,success)
        EndIf

      EndIf

    EndIf
  NextScan

EndProg

